CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "_0.tiff")
    Name to assign these images:Background
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "_1.tiff")
    Name to assign these images:Fiber
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file doesnot contain "Probabilities")
    Name to assign these images:Raw
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:Fiber
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Background
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:ImageAfterMath
    Name the primary objects to be identified:Fibers
    Typical diameter of objects, in pixel units (Min,Max):10,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Suppress local maxima that are closer than this minimum allowed distance:500
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ImageMath:[module_num:7|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Pores_raw
    Image or measurement?:Image
    Select the first image:ImageAfterMath
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
MaskImage:[module_num:8|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
    Select the input image:Pores_raw
    Name the output image:Pores_mask
    Use objects or an image as a mask?:Objects
    Select object for mask:Fibers
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:Pores_mask
    Name the primary objects to be identified:Pores
    Typical diameter of objects, in pixel units (Min,Max):2,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
ConvertObjectsToImage:[module_num:10|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
    Select the input objects:Fibers
    Name the output image:Fiber_convert
    Select the color format:uint16
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
SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:Fiber_convert
    Select method for constructing file names:From image filename
    Select image name for file prefix:Fiber
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_labels
    Saved file format:tiff
    Output file location:Elsewhere...|Documents\\Broad_Gaborski\\Batch_3_images\\Final_images\\CellProfiler_Output\\4x\\Labels
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

MeasureObjectSizeShape:[module_num:12|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
    Select object sets to measure:Fibers, Pores
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureImageAreaOccupied:[module_num:13|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
    Measure the area occupied by:Objects
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    Select object sets to measure:Fibers, Pores

MeasureObjectIntensity:[module_num:14|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
    Select images to measure:Raw
    Select objects to measure:Fibers, Pores

ConvertObjectsToImage:[module_num:15|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
    Select the input objects:Fibers
    Name the output image:Fibers_image
    Select the color format:Binary (black & white)
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
MorphologicalSkeleton:[module_num:16|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
    Select the input image:Fibers_image
    Name the output image:MorphologicalSkeleton

ExpandOrShrinkObjects:[module_num:17|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
    Select the input objects:Fibers
    Name the output objects:small_fiber
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes

MeasureObjectSkeleton:[module_num:18|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
    Select the seed objects:small_fiber
    Select the skeletonized image:MorphologicalSkeleton
    Retain the branchpoint image?:No
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    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

MeasureImageIntensity:[module_num:19|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
    Select images to measure:Raw
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Fibers, Pores
    Calculate custom percentiles:Yes
    Specify percentiles to measure:25,50,75

ExportToSpreadsheet:[module_num:20|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|Documents\\Broad_Gaborski\\Batch_3_images\\Final_images\\CellProfiler_Output\\4x
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Fibers
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:small_fiber
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Pores
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
